CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'First click the “Update Metadata” button in the top half of the module and then click the “Update” button on the table in the bottom half.', 'After doing this, you should see the table populate with your images with a line per channel.', '']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Frame "0")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "1")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "2")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['This module is set up to detect  your nuclei. There are settings to change, the size filters, the thresholding, the separation of objects, among other. ', '', 'The main parameter you want to change is likely the "Typical Diameter of Objects" min and max settings as this is dependent on the microscope zoom level and camera you used. Press "Step". Once the window has turned up, zoom on a couple of cells and use the "Measure Length" tool in the "Tools" menu.. To do this click and drag across a length. Once you\\'re done note the length in the bottom right of the window. THis is the diamter of this object that you need the mini', '', '']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:6|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notes:['This module is set up to "spread out" from your nuclei until a loss in intensity is found to end up with cell objects']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Red
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyTertiaryObjects:[module_num:7|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notes:['This module subtracts the nuclei objects from the matching cell objects to end up with objects representing the cytoplasm of the cells']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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:8|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notes:['This measures the intensity in the red and green channels in the nuclei and cytoplasm objects']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
    Hidden:2
    Select an image to measure:Green
    Select an image to measure:Red
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:9|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notes:['This module is set up to measure the size and shape of the below objects.']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
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cell
    Calculate the Zernike features?:Yes

GrayToColor:[module_num:10|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notes:['The module creates a composite image of your separate channels so the results of the segmentation can be assessed']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
    Select a color scheme:RGB
    Select the image to be colored red:Red
    Select the image to be colored green:Green
    Select the image to be colored blue:DNA
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:11|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notes:['This draws the outlines of the segmentation on your composite image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:Cytoplasm

SaveImages:[module_num:12|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notes:['This module saves the images created in OverlayOutlines']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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notes:['By default, the CellProfiler measurement module measure a lot of different parameters and these are all output in the spreadsheet output. So as to not overwhelm you with measurments, this pipeline is just output mean intensity and area measurement. This is done by going to the "Press Button to Select Measurements" button below and ticking or unticking the desired measurements. If there is a measurement you want missing the look for it in there and tick it if you find it.']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cytoplasm|Intensity_MeanIntensity_Red,Cytoplasm|AreaShape_Area,Image|Count_Cell,Image|Count_Cytoplasm,Image|Count_Nuclei,Image|FileName_DNA,Cell|AreaShape_Area,Nuclei|Number_Object_Number,Nuclei|Intensity_MeanIntensity_Green,Nuclei|Intensity_MeanIntensity_Red,Nuclei|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CellProfiler_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
