CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:Speckles
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyObjectsManually:[module_num:5|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
    Select the input image:DAPI
    Name the objects to be identified:ROI

MaskImage:[module_num:6|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
    Select the input image:DAPI
    Name the output image:MaskDAPI
    Use objects or an image as a mask?:Objects
    Select object for mask:ROI
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:MaskDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:BiggerNuclei
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MaskImage:[module_num:9|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
    Select the input image:Speckles
    Name the output image:MaskSpeckles
    Use objects or an image as a mask?:Objects
    Select object for mask:BiggerNuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:MaskSpeckles
    Name the primary objects to be identified:h2ax
    Typical diameter of objects, in pixel units (Min,Max):1,5
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.6
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
RelateObjects:[module_num:11|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notes:['Establish a parent-child between the foci (“children”) and the nuclei (“parents”) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:BiggerNuclei
    Child objects:h2ax
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:H2aXsorted
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
RescaleIntensity:[module_num:12|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
    Select the input image:DAPI
    Name the output image:RescaleDAPI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:13|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
    Select the input image:Speckles
    Name the output image:RescaleSpeckles
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:14|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
    Select a color scheme:Composite
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    Name the output image:ColorImage
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    Hidden:2
    Image name:RescaleSpeckles
    Color:#ff0000
    Weight:1.0
    Image name:RescaleDAPI
    Color:blue
    Weight:1.0

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleDAPI
    Name the output image:_NucleiOutlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#F72CFC
    Select objects to display:BiggerNuclei

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleSpeckles
    Name the output image:_SpeckleOutlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:yellow
    Select objects to display:h2ax

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:_BothOutlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:yellow
    Select objects to display:h2ax
    Select outline color:#DD1DE2
    Select objects to display:BiggerNuclei

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:_BothOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_BothOutlines
    Saved file format:tiff
    Output file location:Default Output Folder|Y:\\Imaging_Dropbox\\Jilly\\031018\\Results
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:_NucleiOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiOutlines
    Saved file format:tiff
    Output file location:Default Output Folder|Y:\\Imaging_Dropbox\\Jilly\\031018\\Results
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:_SpeckleOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SpeckleOutlines
    Saved file format:tiff
    Output file location:Default Output Folder|Y:\\Imaging_Dropbox\\Jilly\\031018\\Results
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:21|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Y:\\Imaging_Dropbox\\Jilly\\031018\\Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_h2ax,Image|Count_BiggerNuclei,Image|Count_Nuclei,Image|FileName_DAPI
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
