CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'For the use of MicroManager files you need to click the "Update Metadata Button" and then "Update" near the bottom. This needs to be done any time before you run the pipeline.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Frame "0")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "2")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['']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
    Select the input image:Blue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskImage:[module_num:6|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notes:['']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
    Select the input image:Red
    Name the output image:MaskRed
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:MaskRed
    Name the primary objects to be identified:NucleoliObjects
    Typical diameter of objects, in pixel units (Min,Max):5,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
RelateObjects:[module_num:8|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
    Parent objects:Nuclei
    Child objects:NucleoliObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Nuclei
    Select the smaller identified objects:NucleoliObjects
    Name the tertiary objects to be identified:NucleiWithoutNucleoli
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:Blue
    Select objects to measure:Nuclei
    Select objects to measure:NucleoliObjects
    Select objects to measure:NucleiWithoutNucleoli

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:Red
    Select objects to measure:Nuclei
    Select objects to measure:NucleoliObjects
    Select objects to measure:NucleiWithoutNucleoli

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:NucleoliObjects
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

GrayToColor:[module_num:13|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
    Select a color scheme:Composite
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    Name the output image:ColorImage
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    Hidden:2
    Image name:Red
    Color:#ff0000
    Weight:1.0
    Image name:Blue
    Color:#0000ff
    Weight:1.0

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:NucleiWithoutNucleoli

DisplayDataOnImage:[module_num:15|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
    Display object or image measurements?:Object
    Select the input objects:NucleiWithoutNucleoli
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigOverlay
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):10
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|Gyuryang
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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notes:['If some results are missing then you should click the "Press button to select measurements" button. This ', '', '', 'I had to change the output file location so you will need to change this again']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Gyuryang
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:NucleiWithoutNucleoli|Intensity_MeanIntensity_Blue,NucleiWithoutNucleoli|Intensity_MeanIntensity_Red,NucleiWithoutNucleoli|Number_Object_Number,NucleoliObjects|Parent_Nuclei,NucleoliObjects|Number_Object_Number,NucleoliObjects|Intensity_MeanIntensity_Blue,NucleoliObjects|Intensity_MeanIntensity_Red,NucleoliObjects|AreaShape_Area,Nuclei|Number_Object_Number,Nuclei|Intensity_MeanIntensity_Blue,Nuclei|Intensity_MeanIntensity_Red,Nuclei|AreaShape_Area,Nuclei|Children_NucleoliObjects_Count,Image|Count_Nuclei,Image|Count_NucleoliObjects,Image|FileName_Blue,Image|FileName_Red
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Intensity
    Overwrite existing files without warning?:Yes
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